CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "masks.tif")
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    Name to assign these objects:SegmentedCells
    Select the image type:Objects
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    Select the rule criteria:and (file doesnot contain "masks.tif") (file doesnot contain "DS")
    Name to assign these images:rawimages
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Series
    Metadata category:Series

MeasureObjectNeighbors:[module_num:5|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
    Select objects to measure:SegmentedCells
    Select neighboring objects to measure:SegmentedCells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:SegmentedCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:7|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
    Select images to measure:rawimages
    Select objects to measure:SegmentedCells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:10

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rawimages
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0F80FF
    Select objects to display:SegmentedCells

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/morphology paper/Figure1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:SegmentedCells|Texture_SumEntropy_rawimages_10_02_256,SegmentedCells|Texture_SumEntropy_rawimages_10_03_256,SegmentedCells|Texture_SumEntropy_rawimages_10_01_256,SegmentedCells|Texture_SumEntropy_rawimages_10_00_256,SegmentedCells|Texture_InfoMeas2_rawimages_10_01_256,SegmentedCells|Texture_InfoMeas2_rawimages_10_02_256,SegmentedCells|Texture_InfoMeas2_rawimages_10_03_256,SegmentedCells|Texture_InfoMeas2_rawimages_10_00_256,SegmentedCells|Texture_SumAverage_rawimages_10_03_256,SegmentedCells|Texture_SumAverage_rawimages_10_00_256,SegmentedCells|Texture_SumAverage_rawimages_10_01_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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